CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:96
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['CellP-2D_v1wNU_PART-3of3_03202022-----------This pipeline is Only for 2D-Analysis with Nuclei ', '', '<Upload the following files:', '- Objects identified with Part1 (NU and SO for Distribution)', '- Objects identified with Part2 (all the organelles)', '']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['This module allows you to extract information describing your images (i.e, metadata).', '', 'The Metdata section "Extract from file/folder names" is deputed for the images containing objects (CY, SO, NU)', '', '<<Extract from file/folder names:', '               <Edit the regular expression to extract metadata from your file names', '               <Submit', '<<Extract from image file headers:', '               <Extract metadata ', ' <Update']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)_(?P<SampleName>.*)_BR(?P<BiologReplicate>[1-3])_N(?P<NumberImage>[0-9]{1,2})_Unmixed-1_(?P<ObjectType>.*)_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'it is used to give name to:', '-objects files previously identified in Part1 and Part2 ', '', '<Update', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:9
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ObjectType "SO")
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    Name to assign these objects:SO
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ObjectType "CY")
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    Name to assign these objects:CY
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ObjectType "NU")
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    Name to assign these objects:NU
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ObjectType "LS")
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    Name to assign these objects:LS
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ObjectType "MT")
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    Name to assign these objects:MT
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ObjectType "GL")
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    Name to assign these objects:GL
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ObjectType "PO")
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    Name to assign these objects:PO
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ObjectType "ER")
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    Name to assign these objects:ER
    Select the image type:Objects
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    Select the rule criteria:and (metadata does ObjectType "LD")
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    Name to assign these objects:LD
    Select the image type:Objects
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
Groups:[module_num:4|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notes:['This module allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'Depending on the previous ,,Metadata module,, you can group your samples.', '', '<Group for SampleName, BiologicalReplicate and NumberImage. ', ' You can change the groups at your convenience, ', 'check the Image sets if it correspond to what expected.']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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:SampleName
    Metadata category:BiologReplicate
    Metadata category:NumberImage

MeasureObjectNeighbors:[module_num:5|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notes:['']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
    Select objects to measure:LS
    Select neighboring objects to measure:MT
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_MT_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_MT_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:6|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
    Select objects to measure:LS
    Select neighboring objects to measure:GL
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_GL_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_GL_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:7|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
    Select objects to measure:LS
    Select neighboring objects to measure:PO
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_PO_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_PO_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:8|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
    Select objects to measure:LS
    Select neighboring objects to measure:ER
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_ER_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_ER_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:LS
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_LD_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:MT
    Select neighboring objects to measure:LS
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_LS_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_LS_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:MT
    Select neighboring objects to measure:GL
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_GL_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_GL_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:MT
    Select neighboring objects to measure:PO
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_PO_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_PO_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:MT
    Select neighboring objects to measure:ER
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_ER_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_ER_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:MT
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_LD_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:GL
    Select neighboring objects to measure:LS
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_LS_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_LS_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:GL
    Select neighboring objects to measure:MT
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_MT_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_MT_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:GL
    Select neighboring objects to measure:PO
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_PO_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_PO_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:GL
    Select neighboring objects to measure:ER
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_ER_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_ER_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:GL
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_LD_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:PO
    Select neighboring objects to measure:LS
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_LS_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_LS_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:PO
    Select neighboring objects to measure:MT
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_MT_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_MT_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:22|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
    Select objects to measure:PO
    Select neighboring objects to measure:GL
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_GL_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_GL_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:23|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
    Select objects to measure:PO
    Select neighboring objects to measure:ER
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_ER_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_ER_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:24|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
    Select objects to measure:PO
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_LD_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:25|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
    Select objects to measure:ER
    Select neighboring objects to measure:LS
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_LS_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_LS_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:26|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
    Select objects to measure:ER
    Select neighboring objects to measure:MT
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_MT_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_MT_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:27|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
    Select objects to measure:ER
    Select neighboring objects to measure:GL
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_GL_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_GL_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:28|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
    Select objects to measure:ER
    Select neighboring objects to measure:PO
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_PO_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_PO_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:29|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
    Select objects to measure:ER
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_LD_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:30|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
    Select objects to measure:LD
    Select neighboring objects to measure:LS
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LD_LS_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LD_LS_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:31|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
    Select objects to measure:LD
    Select neighboring objects to measure:MT
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LD_MT_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LD_MT_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:32|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
    Select objects to measure:LD
    Select neighboring objects to measure:GL
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LD_GL_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LD_GL_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:33|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
    Select objects to measure:LD
    Select neighboring objects to measure:PO
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LD_PO_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LD_PO_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:34|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
    Select objects to measure:LD
    Select neighboring objects to measure:ER
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LD_ER_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LD_ER_PercentContact
    Select colormap:Oranges

MaskObjects:[module_num:35|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
    Select objects to be masked:LS
    Name the masked objects:LS_MT
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MT
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:36|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
    Select objects to be masked:LS
    Name the masked objects:LS_GL
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:GL
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:37|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
    Select objects to be masked:LS
    Name the masked objects:LS_PO
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PO
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:38|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
    Select objects to be masked:LS
    Name the masked objects:LS_ER
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:39|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
    Select objects to be masked:LS
    Name the masked objects:LS_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:40|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
    Select objects to be masked:MT
    Name the masked objects:MT_GL
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:GL
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:41|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
    Select objects to be masked:MT
    Name the masked objects:MT_PO
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PO
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:42|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
    Select objects to be masked:MT
    Name the masked objects:MT_ER
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:43|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
    Select objects to be masked:MT
    Name the masked objects:MT_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:44|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
    Select objects to be masked:GL
    Name the masked objects:GL_PO
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PO
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:45|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
    Select objects to be masked:GL
    Name the masked objects:GL_ER
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:46|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
    Select objects to be masked:GL
    Name the masked objects:GL_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:47|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
    Select objects to be masked:PO
    Name the masked objects:PO_ER
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:48|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
    Select objects to be masked:PO
    Name the masked objects:PO_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:49|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
    Select objects to be masked:ER
    Name the masked objects:ER_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:50|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
    Select the input objects:LS_MT
    Name the output image:LS_MT_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:51|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
    Select the input objects:LS_MT
    Name the output image:LS_MT_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:52|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
    Select the input objects:LS_GL
    Name the output image:LS_GL_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:53|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
    Select the input objects:LS_GL
    Name the output image:LS_GL_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:54|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
    Select the input objects:LS_PO
    Name the output image:LS_PO_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:55|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
    Select the input objects:LS_PO
    Name the output image:LS_PO_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:56|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
    Select the input objects:LS_ER
    Name the output image:LS_ER_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:57|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
    Select the input objects:LS_ER
    Name the output image:LS_ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:58|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
    Select the input objects:LS_LD
    Name the output image:LS_LD_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:59|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
    Select the input objects:LS_LD
    Name the output image:LS_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:60|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
    Select the input objects:MT_GL
    Name the output image:MT_GL_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:61|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
    Select the input objects:MT_GL
    Name the output image:MT_GL_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:62|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
    Select the input objects:MT_PO
    Name the output image:MT_PO_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:63|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
    Select the input objects:MT_PO
    Name the output image:MT_PO_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:64|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
    Select the input objects:MT_ER
    Name the output image:MT_ER_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:65|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
    Select the input objects:MT_ER
    Name the output image:MT_ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:66|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
    Select the input objects:MT_LD
    Name the output image:MT_LD_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:67|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
    Select the input objects:MT_LD
    Name the output image:MT_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:68|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
    Select the input objects:GL_PO
    Name the output image:GL_PO_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:69|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
    Select the input objects:GL_PO
    Name the output image:GL_PO_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:70|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
    Select the input objects:GL_ER
    Name the output image:GL_ER_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:71|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
    Select the input objects:GL_ER
    Name the output image:GL_ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:72|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
    Select the input objects:GL_LD
    Name the output image:GL_LD_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:73|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
    Select the input objects:GL_LD
    Name the output image:GL_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:74|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
    Select the input objects:PO_ER
    Name the output image:PO_ER_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:75|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
    Select the input objects:PO_ER
    Name the output image:PO_ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:76|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
    Select the input objects:PO_LD
    Name the output image:PO_LD_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:77|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
    Select the input objects:PO_LD
    Name the output image:PO_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:78|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
    Select the input objects:ER_LD
    Name the output image:ER_LD_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:79|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
    Select the input objects:ER_LD
    Name the output image:ER_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:80|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
    Select the input objects:LS
    Name the output image:LS_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:81|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
    Select the input objects:LS
    Name the output image:LS_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:82|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
    Select the input objects:MT
    Name the output image:MT_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:83|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
    Select the input objects:MT
    Name the output image:MT_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:84|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
    Select the input objects:GL
    Name the output image:GL_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:85|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
    Select the input objects:GL
    Name the output image:GL_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:86|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
    Select the input objects:PO
    Name the output image:PO_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:87|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
    Select the input objects:PO
    Name the output image:PO_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:88|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
    Select the input objects:ER
    Name the output image:ER_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:89|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
    Select the input objects:ER
    Name the output image:ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:90|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
    Select the input objects:LD
    Name the output image:LD_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:91|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
    Select the input objects:LD
    Name the output image:LD_conv
    Select the color format:Binary (black & white)
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
MeasureObjectSizeShape:[module_num:92|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
    Select object sets to measure:CY, ER, ER_LD, GL, GL_ER, GL_LD, GL_PO, LD, LS, LS_ER, LS_GL, LS_LD, LS_MT, LS_PO, MT, MT_ER, MT_GL, MT_LD, MT_PO, NU, PO, PO_ER, PO_LD, SO
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:93|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
    Measure the area occupied by:Objects
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    Select object sets to measure:CY, ER, ER_LD, GL, GL_ER, GL_LD, GL_PO, LD, LS, LS_ER, LS_GL, LS_LD, LS_MT, LS_PO, MT, MT_ER, MT_GL, MT_LD, MT_PO, NU, PO, PO_ER, PO_LD, SO

MeasureObjectIntensityDistribution:[module_num:94|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notes:['DISTRIBUTION ORGANELLES', '', '<<Select images to measure:', '     <Select the previously identified objects (from Part1) and converted into binary image (in Part3)', '<<Number of bins:', '     <Set the number of bins higher of lower, correspondingly']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
    Select images to measure:ER_conv, GL_conv, LD_conv, LS_conv, MT_conv, PO_conv
    Hidden:1
    Hidden:1
    Hidden:6
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:SO
    Object to use as center?:Edges of other objects
    Select objects to use as centers:NU
    Scale the bins?:Yes
    Number of bins:6
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    Image:LS_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:LS_Distribution
    Image:MT_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:MT_Distribution
    Image:GL_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:GL_Distribution
    Image:PO_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:PO_Distribution
    Image:ER_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:ER_Distribution
    Image:LD_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:LD_Distribution

MeasureObjectIntensityDistribution:[module_num:95|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notes:['DISTRIBUTION ORGANELLE CONTACTS', '', '<<Select images to measure:', '     <Select the previously identified objects (from Part1) and converted into binary image (in Part3)', '<<Number of bins:', '     <Set the number of bins higher of lower, correspondingly']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
    Select images to measure:ER_LD_conv, GL_ER_conv, GL_LD_conv, GL_PO_conv, LS_ER_conv, LS_GL_conv, LS_LD_conv, LS_MT_conv, LS_PO_conv, MT_ER_conv, MT_GL_conv, MT_LD_conv, MT_PO_conv, PO_ER_conv, PO_LD_conv
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:SO
    Object to use as center?:Edges of other objects
    Select objects to use as centers:NU
    Scale the bins?:Yes
    Number of bins:6
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
ExportToSpreadsheet:[module_num:96|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notes:['EXPORT ALL THE MEASURMENTS INTO CSV FILES', '', '<<Select the measurments of your interest']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:CellP2Dv1wNU03202022_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:SO
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CY
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:LS
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MT
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:GL
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:PO
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ER
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:LD
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NU
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
